PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1200, 800]
  expName = Audiometer_v2
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textWelc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome to the experiment!
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    TextComponent textExplain
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text:
        This is an audiometry test to measure your absolute threshold of hearing.

        You will be presented with sounds of different frequencies, following which you have to indicate if you hear them (by pressing the 'Yes' button) or not (by pressing the 'No' button).

        You will first hear sounds from your left ear, followed by sounds from your right ear.

        Press SPACEBAR to start.
    KeyboardComponent key_respStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine trial_left
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    CodeComponent codetrials_left
      Code Type = Auto->JS
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      Begin Experiment:
        # Global variables
        step = 5
        sound_file_path = "Audio_Final/"
        dummy_file_path = f"{sound_file_path}dummy.wav"

        # Frequencies used in the audiometer
        frequencies = [125, 250, 500, 1000, 2000, 3000, 4000, 6000, 8000]  # List of frequencies

        # Fixed lower limit for both ears
        lower_lim_left = -20.0

        # Updated dictionary mapping frequencies to their corresponding upper limits
        upper_limits = {
            125: 40.0,
            250: 50.0,
            500: 60.0,
            1000: 70.0,
            2000: 70.0,
            3000: 70.0,
            4000: 60.0,
            6000: 50.0,
            8000: 50.0
        }

        # Initialize variables for the left ear
        current_dB_left = 30.0
        frequency_index_left = 0
        frequency_left = frequencies[frequency_index_left]
        upper_lim_left = upper_limits[frequency_left]
        reversals_left = 0
        reading_num_left = 0
        trial_num_left = 0
        user_resp_left = []
        readings_left = []
        dummy_play_count_left = 0
        limit_played_left = False
        waiting_for_y_left = False
        dummy_trial_repeats = 0
        frequency_updated = False
      Begin Routine:
        # Set the initial sound file for the left ear
        current_filename_left = f"{sound_file_path}{frequency_left}_{current_dB_left:.1f}_left.wav"
        sound_left.setSound(current_filename_left, secs=30.0, hamming=False)

        # Print the current filename and dB level for debugging
        print(f"Filename: {current_filename_left}")
        print(f"Current dB (left): {current_dB_left}")
      End Routine:
        # Store the current_dB value before updating it
        previous_dB_left = current_dB_left

        # Check for mouse clicks on "Yes" or "No" buttons
        clicked_button = None
        while clicked_button is None:
            if mouse_left.isPressedIn(yes_button_left):
                clicked_button = 'y'
            elif mouse_left.isPressedIn(no_button_left):
                clicked_button = 'n'
            core.wait(0.01)

        # Update current_dB based on the clicked button
        if clicked_button == 'y':
            print("Yes button clicked")
            user_resp_left.append('y')
            current_dB_left -= step * 2
        elif clicked_button == 'n':
            print("No button clicked")
            user_resp_left.append('n')
            current_dB_left += step

        # Ensure current_dB stays within the defined limits
        if lower_lim_left <= current_dB_left <= upper_lim_left:
            current_filename_left = f"{sound_file_path}{frequency_left}_{current_dB_left:.1f}_left.wav"
            dummy_play_count_left = 0
            limit_played_left = False

        elif current_dB_left > upper_lim_left:
            print("Current dB exceeds upper limit")
            current_dB_left = upper_lim_left
            if not limit_played_left:
                current_filename_left = f"{sound_file_path}{frequency_left}_{upper_lim_left:.1f}_left.wav"
                limit_played_left = True
                print("Playing upper limit sound")
            else:
                if 'n' in user_resp_left[-1]:
                    frequency_index_left += 1
                    if frequency_index_left < len(frequencies):
                        frequency_left = frequencies[frequency_index_left]
                        current_dB_left = 30.0
                        upper_lim_left = upper_limits[frequency_left]
                        reversals_left = 0
                        reading_num_left = 0
                        trial_num_left = 0
                        user_resp_left = []
                        readings_left = []
                        frequency_updated = False
                        next_freq_message_left = f"Next frequency: {frequency_left} Hz"
                        print(f"Moving to next frequency: {frequency_left} Hz")
                    else:
                        trials_left.finished = True
                        print("All frequencies tested, ending Left Ear")

        elif current_dB_left < lower_lim_left:
            print("Current dB below lower limit")
            current_dB_left = lower_lim_left
            if not limit_played_left:
                current_filename_left = f"{sound_file_path}{frequency_left}_{lower_lim_left:.1f}_left.wav"
                limit_played_left = True
                print("Playing lower limit sound")
                sound_left.setSound(current_filename_left, secs=30.0, hamming=False)
                sound_left.play()
            else:
                event.clearEvents(eventType='mouse')
                while not any(mouse_left.getPressed()):
                    pass
                if mouse_left.isPressedIn(yes_button_left):
                    print("Yes button clicked during dummy trial")
                    dummy_play_count_left = 0
                    y_count = 0
                    n_count = 0
                    while dummy_play_count_left < 3:
                        event.clearEvents(eventType='mouse')
                        print(f"Playing dummy.wav {dummy_play_count_left + 1} time(s)")
                        win.color = (0, 0, 0)
                        win.flip()
                        core.wait(0.5)
                        win.color = (0, 0, 0)
                        yes_button_left.draw()
                        no_button_left.draw()
                        win.flip()
                        sound_left.setSound(dummy_file_path, secs=30.0, hamming=False)
                        sound_left.play()
                        click_detected = False
                        while not click_detected:
                            if any(mouse_left.getPressed()):
                                if mouse_left.isPressedIn(yes_button_left):
                                    print("Yes button clicked during dummy trial playback")
                                    y_count += 1
                                    thisExp.addData(f'dummy_response_{dummy_play_count_left + 1}_left', 'y')
                                    click_detected = True
                                elif mouse_left.isPressedIn(no_button_left):
                                    print("No button clicked during dummy trial playback")
                                    n_count += 1
                                    thisExp.addData(f'dummy_response_{dummy_play_count_left + 1}_left', 'n')
                                    click_detected = True
                            core.wait(0.01)
                        dummy_play_count_left += 1

                    if y_count >= 2:
                        frequency_index_left += 1
                        if frequency_index_left < len(frequencies):
                            frequency_left = frequencies[frequency_index_left]
                            current_dB_left = 30.0
                            upper_lim_left = upper_limits[frequency_left]
                            reversals_left = 0
                            reading_num_left = 0
                            trial_num_left = 0
                            user_resp_left = []
                            readings_left = []
                            frequency_updated = False
                            next_freq_message_left = f"Next frequency: {frequency_left} Hz"
                            print(f"Moving to next frequency: {frequency_left} Hz")
                        else:
                            trials_left.finished = True
                            print("All frequencies tested, ending experiment")

                    elif n_count >= 2:
                        dummy_trial_repeats += 1
                        thisExp.addData('Level_left', -20)
                        readings_left.append(-20)
                        thisExp.addData('Readings_left', -20.0)
                        reading_num_left += 1
                        print("Recorded -20.0 as a valid threshold")

                        if dummy_trial_repeats < 3:
                            current_dB_left = lower_lim_left
                            print(f"Restarting from lower limit: {current_dB_left}")
                        else:
                            if readings_left.count(-20) >= 3 and dummy_trial_repeats >= 3:
                                if not frequency_updated:
                                    if frequency_index_left < len(frequencies) - 1:
                                        frequency_index_left += 1
                                        frequency_left = frequencies[frequency_index_left]
                                        frequency_updated = True
                                        current_dB_left = 30.0
                                        upper_lim_left = upper_limits[frequency_left]
                                        reversals_left = 0
                                        reading_num_left = 0
                                        trial_num_left = 0
                                        user_resp_left = []
                                        readings_left = []
                                        frequency_updated = False
                                        next_freq_message_left = f"Next frequency: {frequency_left} Hz"
                                        print(f"Dummy trial triggered frequency change: {frequency_left} Hz (Index: {frequency_index_left})")
                                    else:
                                        trials_left.finished = True
                                        print("All frequencies tested, ending Left Ear")
                elif mouse_left.isPressedIn(no_button_left):
                    print("No button clicked during dummy trial")
                    user_resp_left.append('n')
                    print(f"User response left: {user_resp_left}")
                    current_dB_left += step

        # Track user responses and reversals
        print(f"User response left: {user_resp_left}")
        if len(user_resp_left) > 1:
            if user_resp_left[-1] != user_resp_left[-2]:
                reversals_left += 1
                print(f"Reversals left: {reversals_left}")
                if reversals_left % 2 == 0:
                    if user_resp_left[-1] == 'n':
                        waiting_for_y_left = True
                        print("Waiting for next 'y' to record the reading")
                    elif user_resp_left[-1] == 'y':
                        latest_reading_left = previous_dB_left
                        readings_left.append(latest_reading_left)
                        reading_num_left += 1
                        print(f"Recording reading (2nd reversal): {latest_reading_left}")
                        thisExp.addData('Readings_left', latest_reading_left)
                        waiting_for_y_left = False
                elif waiting_for_y_left and user_resp_left[-1] == 'y':
                    latest_reading_left = previous_dB_left
                    readings_left.append(latest_reading_left)
                    reading_num_left += 1
                    print(f"Recording reading (waiting for y): {latest_reading_left}")
                    thisExp.addData('Readings_left', latest_reading_left)
                    waiting_for_y_left = False

        # Check for concordant readings
        if not frequency_updated and len(readings_left) >= 3:
            most_common_reading = max(set(readings_left), key=readings_left.count)
            if readings_left.count(most_common_reading) >= 3 or len(readings_left) > 10:
                if frequency_index_left < len(frequencies) - 1:
                    frequency_index_left += 1
                    frequency_left = frequencies[frequency_index_left]
                    current_dB_left = 30.0
                    upper_lim_left = upper_limits[frequency_left]
                    reversals_left = 0
                    reading_num_left = 0
                    trial_num_left = 0
                    user_resp_left = []
                    readings_left = []
                    next_freq_message_left = f"Next frequency: {frequency_left} Hz"
                    print(f"Normal trials triggered frequency change: {frequency_left} Hz (Index: {frequency_index_left})")
                else:
                    trials_left.finished = True
                    print("All frequencies tested, ending Left Ear")

        # Add data to the experiment
        thisExp.addData('Level_left', current_dB_left)
        trial_num_left += 1
        print(f"Final filename: {current_filename_left}")
    TextComponent next_freq_text_left
      letterHeight = 0.05
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    ImageComponent yes_button_left
      image [set every repeat] = Mouse/Yes.png
      pos = (-8, 0)
      size = (5, 5)
      startVal [time (s)] = 0.3
      units = cm
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    ImageComponent no_button_left
      image [set every repeat] = Mouse/No.png
      pos = (8,0)
      size = (5, 5)
      startVal [time (s)] = 0.3
      units = cm
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    SoundComponent sound_left
      hamming = False
      sound [set every repeat] = $current_filename_left
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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    MouseComponent mouse_left
      clickable = (yes_button_left,no_button_left)
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.3
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine blank500
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Int_Message
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    TextComponent textInterval
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = All trials for the left ear have finished. We will now proceed to the trials for the right ear.
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  Routine trial_right
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    CodeComponent codetrials_right
      Code Type = Auto->JS
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      Begin Experiment:
        # Global variables
        step = 5
        sound_file_path = "Audio_Final/"
        dummy_file_path = f"{sound_file_path}dummy.wav"

        # Frequencies used in the audiometer
        frequencies = [125, 250, 500, 1000, 2000, 3000, 4000, 6000, 8000]  # List of frequencies

        # Fixed lower limit for both ears
        lower_lim_right = -20.0

        # Updated dictionary mapping frequencies to their corresponding upper limits
        upper_limits = {
            125: 40.0,
            250: 50.0,
            500: 60.0,
            1000: 70.0,
            2000: 70.0,
            3000: 70.0,
            4000: 60.0,
            6000: 50.0,
            8000: 50.0
        }

        ### === RIGHT EAR VARIABLES === ###
        trial_num_right = 0  # Counter to keep track of trials
        reading_num_right = 0  # Counter to keep track of reading number
        user_resp_right = []  # List to keep track of key responses
        reversals_right = 0  # Counter variable to keep track of reversals
        readings_right = []  # List to keep track of all readings
        frequency_index_right = 0  # Index to keep track of the current frequency
        frequency_right = frequencies[frequency_index_right]  # Current frequency
        upper_lim_right = upper_limits[frequency_right]  # Set dynamic upper limit

        current_dB_right = 30.0  # Initial dB level for the first trial
        current_filename_right = f"{sound_file_path}{frequency_right}_{current_dB_right:.1f}_right.wav"  # Initial filename

        next_freq_message_right = ""  # Message for next frequency
        latest_reading_right = None  # Store latest dB reading
        waiting_for_y_right = False  # Flag for response tracking
        dummy_play_count_right = 0  # Counter for dummy.wav plays
        limit_played_right = False  # Flag to check if limit sound was played
        dummy_responses_right = []  # List to keep track of dummy.wav responses
        dummy_trial_repeats = 0 #Counter for the amount of times a set of 3 dummy trials has been run
      Begin Routine:
        # Update the filename based on the current frequency and dB level
        current_filename_right = f"{sound_file_path}{frequency_right}_{current_dB_right:.1f}_right.wav"

        # Check if the current_dB has crossed the limits
        #if current_dB_right > upper_lim_right or current_dB_right < lower_lim_right:
        #    print("Error! You have crossed the limit of this audiometer.")
        #    crossed_limit_right = True  # Set the flag if current_dB crosses the limit
        #else:
        #    crossed_limit_right = False

        # Print the current filename and dB level for debugging
        print(f"Filename: {current_filename_right}")
        print(f"Current dB (right): {current_dB_right}")

        # Set the sound file explicitly
        sound_right.setSound(current_filename_right, secs=30.0, hamming=False)
        # Initialize play_limit_sound and crossed_limit
        #play_limit_sound = False
        #crossed_limit = False
        #limit_reached = False  # New flag to indicate if the limit has been reached
        #limit_type = None  # New variable to indicate which limit was reached ('upper' or 'lower')
      End Routine:
        # Store the current_dB value before updating it
        previous_dB_right = current_dB_right

        # Check for mouse clicks on "Yes" or "No" buttons
        clicked_button = None
        while clicked_button is None:
            if mouse_right.isPressedIn(yes_button_right):
                clicked_button = 'y'
            elif mouse_right.isPressedIn(no_button_right):
                clicked_button = 'n'
            core.wait(0.01)

        # Update current_dB based on the clicked button
        if clicked_button == 'y':
            print("Yes button clicked")
            user_resp_right.append('y')
            current_dB_right -= step * 2
        elif clicked_button == 'n':
            print("No button clicked")
            user_resp_right.append('n')
            current_dB_right += step

        # Ensure current_dB stays within the defined limits
        if lower_lim_right <= current_dB_right <= upper_lim_right:
            current_filename_right = f"{sound_file_path}{frequency_right}_{current_dB_right:.1f}_right.wav"
            dummy_play_count_right = 0
            limit_played_right = False

        elif current_dB_right > upper_lim_right:
            print("Current dB exceeds upper limit")
            current_dB_right = upper_lim_right
            if not limit_played_right:
                current_filename_right = f"{sound_file_path}{frequency_right}_{upper_lim_right:.1f}_right.wav"
                limit_played_right = True
                print("Playing upper limit sound")
            else:
                if 'n' in user_resp_right[-1]:
                    frequency_index_right += 1
                    if frequency_index_right < len(frequencies):
                        frequency_right = frequencies[frequency_index_right]
                        current_dB_right = 30.0
                        upper_lim_right = upper_limits[frequency_right]
                        reversals_right = 0
                        reading_num_right = 0
                        trial_num_right = 0
                        user_resp_right = []
                        readings_right = []
                        frequency_updated = False
                        next_freq_message_right = f"Next frequency: {frequency_right} Hz"
                        print(f"Moving to next frequency: {frequency_right} Hz")
                    else:
                        trials_right.finished = True
                        print("All frequencies tested, ending Right Ear")

        elif current_dB_right < lower_lim_right:
            print("Current dB below lower limit")
            current_dB_right = lower_lim_right
            if not limit_played_right:
                current_filename_right = f"{sound_file_path}{frequency_right}_{lower_lim_right:.1f}_right.wav"
                limit_played_right = True
                print("Playing lower limit sound")
                sound_right.setSound(current_filename_right, secs=30.0, hamming=False)
                sound_right.play()
            else:
                event.clearEvents(eventType='mouse')
                while not any(mouse_right.getPressed()):
                    pass
                if mouse_right.isPressedIn(yes_button_right):
                    print("Yes button clicked during dummy trial")
                    dummy_play_count_right = 0
                    y_count = 0
                    n_count = 0
                    while dummy_play_count_right < 3:
                        event.clearEvents(eventType='mouse')
                        print(f"Playing dummy.wav {dummy_play_count_right + 1} time(s)")
                        win.color = (0, 0, 0)
                        win.flip()
                        core.wait(0.5)
                        win.color = (0, 0, 0)
                        yes_button_right.draw()
                        no_button_right.draw()
                        win.flip()
                        sound_right.setSound(dummy_file_path, secs=30.0, hamming=False)
                        sound_right.play()
                        click_detected = False
                        while not click_detected:
                            if any(mouse_right.getPressed()):
                                if mouse_right.isPressedIn(yes_button_right):
                                    print("Yes button clicked during dummy trial playback")
                                    y_count += 1
                                    thisExp.addData(f'dummy_response_{dummy_play_count_right + 1}_right', 'y')
                                    click_detected = True
                                elif mouse_right.isPressedIn(no_button_right):
                                    print("No button clicked during dummy trial playback")
                                    n_count += 1
                                    thisExp.addData(f'dummy_response_{dummy_play_count_right + 1}_right', 'n')
                                    click_detected = True
                            core.wait(0.01)
                        dummy_play_count_right += 1

                    if y_count >= 2:
                        frequency_index_right += 1
                        if frequency_index_right < len(frequencies):
                            frequency_right = frequencies[frequency_index_right]
                            current_dB_right = 30.0
                            upper_lim_right = upper_limits[frequency_right]
                            reversals_right = 0
                            reading_num_right = 0
                            trial_num_right = 0
                            user_resp_right = []
                            readings_right = []
                            frequency_updated = False
                            next_freq_message_right = f"Next frequency: {frequency_right} Hz"
                            print(f"Moving to next frequency: {frequency_right} Hz")
                        else:
                            trials_right.finished = True
                            print("All frequencies tested, ending experiment")

                    elif n_count >= 2:
                        dummy_trial_repeats += 1
                        thisExp.addData('Level_right', -20)
                        readings_right.append(-20)
                        thisExp.addData('Readings_right', -20.0)
                        reading_num_right += 1
                        print("Recorded -20.0 as a valid threshold")

                        if dummy_trial_repeats < 3:
                            current_dB_right = lower_lim_right
                            print(f"Restarting from lower limit: {current_dB_right}")
                        else:
                            if readings_right.count(-20) >= 3 and dummy_trial_repeats >= 3:
                                if not frequency_updated:
                                    if frequency_index_right < len(frequencies) - 1:
                                        frequency_index_right += 1
                                        frequency_right = frequencies[frequency_index_right]
                                        frequency_updated = True
                                        current_dB_right = 30.0
                                        upper_lim_right = upper_limits[frequency_right]
                                        reversals_right = 0
                                        reading_num_right = 0
                                        trial_num_right = 0
                                        user_resp_right = []
                                        readings_right = []
                                        frequency_updated = False
                                        next_freq_message_right = f"Next frequency: {frequency_right} Hz"
                                        print(f"Dummy trial triggered frequency change: {frequency_right} Hz (Index: {frequency_index_right})")
                                    else:
                                        trials_right.finished = True
                                        print("All frequencies tested, ending Right Ear")
                elif mouse_right.isPressedIn(no_button_right):
                    print("No button clicked during dummy trial")
                    user_resp_right.append('n')
                    print(f"User response right: {user_resp_right}")
                    current_dB_right += step

        # Track user responses and reversals
        print(f"User response right: {user_resp_right}")
        if len(user_resp_right) > 1:
            if user_resp_right[-1] != user_resp_right[-2]:
                reversals_right += 1
                print(f"Reversals right: {reversals_right}")
                if reversals_right % 2 == 0:
                    if user_resp_right[-1] == 'n':
                        waiting_for_y_right = True
                        print("Waiting for next 'y' to record the reading")
                    elif user_resp_right[-1] == 'y':
                        latest_reading_right = previous_dB_right
                        readings_right.append(latest_reading_right)
                        reading_num_right += 1
                        print(f"Recording reading (2nd reversal): {latest_reading_right}")
                        thisExp.addData('Readings_right', latest_reading_right)
                        waiting_for_y_right = False
                elif waiting_for_y_right and user_resp_right[-1] == 'y':
                    latest_reading_right = previous_dB_right
                    readings_right.append(latest_reading_right)
                    reading_num_right += 1
                    print(f"Recording reading (waiting for y): {latest_reading_right}")
                    thisExp.addData('Readings_right', latest_reading_right)
                    waiting_for_y_right = False

        # Check for concordant readings
        if not frequency_updated and len(readings_right) >= 3:
            most_common_reading = max(set(readings_right), key=readings_right.count)
            if readings_right.count(most_common_reading) >= 3 or len(readings_right) > 10:
                if frequency_index_right < len(frequencies) - 1:
                    frequency_index_right += 1
                    frequency_right = frequencies[frequency_index_right]
                    current_dB_right = 30.0
                    upper_lim_right = upper_limits[frequency_right]
                    reversals_right = 0
                    reading_num_right = 0
                    trial_num_right = 0
                    user_resp_right = []
                    readings_right = []
                    next_freq_message_right = f"Next frequency: {frequency_right} Hz"
                    print(f"Normal trials triggered frequency change: {frequency_right} Hz (Index: {frequency_index_right})")
                else:
                    trials_right.finished = True
                    print("All frequencies tested, ending Right Ear")

        # Add data to the experiment
        thisExp.addData('Level_right', current_dB_right)
        trial_num_right += 1
        print(f"Final filename: {current_filename_right}")
    TextComponent next_freq_text_right
      letterHeight = 0.05
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    ImageComponent yes_button_right
      image [set every repeat] = Mouse/Yes.png
      pos = (-8, 0)
      size = (5, 5)
      startVal [time (s)] = 0.3
      units = cm
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    ImageComponent no_button_right
      image [set every repeat] = Mouse/No.png
      pos = (8,0)
      size = (5,5)
      startVal [time (s)] = 0.3
      units = cm
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    SoundComponent sound_right
      hamming = False
      sound [set every repeat] = $current_filename_right
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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    MouseComponent mouse_right
      clickable = (yes_button_right,no_button_right)
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.3
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine EndScreen
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thanks for participating in this experiment! Please notify the experimenter about the completion.
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    KeyboardComponent key_respEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine EndCode
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    CodeComponent code_end
      Code Type = Auto->JS
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      End Experiment:
        # Log the latest readings at the end of the experiment
        thisExp.addData('Latest_Readings_left', latest_readings_left)
        thisExp.addData('Latest_Readings_right', latest_readings_right)
Flow
  Routine WelcomeScreen
  Routine blank500
  LoopInitiator trials_left loopType="TrialHandler"
    loopType = sequential
    nReps = 500
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    Routine trial_left
    Routine blank500
  LoopTerminator trials_left
  Routine blank500
  Routine Int_Message
  Routine blank500
  LoopInitiator trials_right loopType="TrialHandler"
    loopType = sequential
    nReps = 500
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    Routine trial_right
    Routine blank500
  LoopTerminator trials_right
  Routine blank500
  Routine EndScreen
